CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:10415

LoadImages:[module_num:1|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notes:["Load the images by matching files in the folder against the unique text pattern for each stain: 'Channel 1' for protein, 'Channel 2' for the nuclei image. The two images together comprise an image set."]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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:No
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):Channel 1
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    Extract metadata from where?:None
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    Channel count:1
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    Name this loaded image:OrigProtein
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    Text that these images have in common (case-sensitive):Channel 2
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    Extract metadata from where?:None
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    Channel count:1
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    Name this loaded image:OrigDNA
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
LoadSingleImage:[module_num:2|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notes:['Load illumination correction functions that have been pre-calculated and saved.']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
    Input image file location:Default Input Folder|.
    Filename of the image to load (Include the extension, e.g., .tif):VitraChannel1ILLUM.mat
    Name the image that will be loaded:IllumProtein
    Filename of the image to load (Include the extension, e.g., .tif):VitraChannel2ILLUM.mat
    Name the image that will be loaded:IllumDNA

CorrectIlluminationApply:[module_num:3|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notes:['Correct both images by applying the illumination correction functions through division. ']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
    Select the input image:OrigProtein
    Name the output image:CorrProtein
    Select the illumination function:IllumProtein
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:5|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Distance-B method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrProtein
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Number of pixels by which to expand the primary objects:6
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    Name the outline image:CellOutlines
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    Retain outlines of the identified secondary objects?:Yes
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifyTertiaryObjects:[module_num:6|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:7|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the corrected images.']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
    Hidden:1
    Select an image to measure:CorrProtein
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

CalculateMath:[module_num:8|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notes:['Calculate the nuclei-to-cell ratio of the mean protein intensity.']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
    Name the output measurement:Ratio1
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:9|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notes:['Calculate the cytoplasm-to-cell ratio of the mean protein intensity.']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
    Name the output measurement:Ratio2
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_CorrProtein
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

OverlayOutlines:[module_num:10|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notes:['Overlay the nucleus and cell outlines on the protein image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrProtein
    Name the output image:Outlined
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:Blue
    Select outlines to display:CellOutlines
    Select outline color:Green

SaveImages:[module_num:11|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notes:["Save the nuclei overlay image as an 8-bit TIF, appending the text '_Outlined' to the original filename of the protein image."]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
    Select the type of image to save:Image
    Select the image to save:Outlined
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigProtein
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_Outlined
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:12|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
