CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):_0003.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Staining>.*)-(?P<Dose>.*)-(?P<Quality>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DAPI
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0001.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Staining>.*)-(?P<Dose>.*)-(?P<Quality>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Alexa488
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):_0002.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Staining>.*)-(?P<Dose>.*)-(?P<Quality>.*)-_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Alexa568
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    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:DAPI
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:DAPI
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Alexa568
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Name the outline image:CellsOutlines
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    Retain outlines of the identified secondary objects?:Yes
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

IdentifyTertiaryObjects:[module_num:6|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes

MeasureObjectIntensity:[module_num:7|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the cropped images.']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
    Hidden:3
    Select an image to measure:CorrBlue
    Select an image to measure:Alexa488
    Select an image to measure:Alexa568
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

RescaleIntensity:[module_num:9|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
    Select the input image:DAPI
    Name the output image:RescaledBlue
    Select rescaling method:Choose specific values to be reset to a custom range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,1
    Enter the desired intensity range for the final, rescaled image:0.0,16
    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:1
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:1
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
RescaleIntensity:[module_num:10|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
    Select the input image:Alexa488
    Name the output image:RescaledGreen
    Select rescaling method:Choose specific values to be reset to a custom range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,1
    Enter the desired intensity range for the final, rescaled image:0.0,16
    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:1
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:1
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
RescaleIntensity:[module_num:11|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
    Select the input image:Alexa568
    Name the output image:RescaledRed
    Select rescaling method:Choose specific values to be reset to a custom range
    How do you want to calculate the minimum intensity?:Custom
    How do you want to calculate the maximum intensity?:Custom
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    Enter the intensity range for the input image:0.0,1
    Enter the desired intensity range for the final, rescaled image:0.0,16
    Select method for rescaling pixels below the lower limit:Set to zero
    Enter custom value for pixels below lower limit:1
    Select method for rescaling pixels above the upper limit:Set to one
    Enter custom value for pixels below upper limit:1
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
GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Select the input image to be colored red:RescaledRed
    Select the input image to be colored green:RescaledGreen
    Select the input image to be colored blue:RescaledBlue
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:Blue
    Select outlines to display:CellsOutlines
    Select outline color:White

SaveImages:[module_num:14|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notes:["Save the overlay image as an 8-bit TIF, appending the text 'outline' to the original filename of the nuclei image."]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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:outline
    Select file format to use:jpg
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:15|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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