CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):.JPG
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:InputImage
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    Rescale intensities?:No

Resize:[module_num:2|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notes:['Not resizing and removing the original afterwards will result in a MemoryError.']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
    Select the input image:InputImage
    Name the output image:ResizedInput
    Select resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ColorToGray:[module_num:3|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notes:['Splits RGB file, deletes red and blue channels and performs OTSU to generate black white image.']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
    Select the input image:ResizedInput
    Conversion method:Split
    Image type::RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ConserveMemory:[module_num:4|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
    Specify which images?:Images to remove
    Select image to remove:InputImage
    Select image to remove:OrigRed
    Select image to remove:ResizedInput

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the dilated image for use later in the pipeline (for example, in SaveImages)?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigBlue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Select the input image:OrigGreen
    Name the output image:CorrGreen
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide

ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CorrBlue
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CorrGreen
    Multiply the second image by:1.2
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
RescaleIntensity:[module_num:8|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
    Select the input image:ImageAfterMath
    Name the output image:Rescaled
    Select rescaling method:Stretch each image to use the full intensity range
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
ApplyThreshold:[module_num:9|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
    Select the input image:Rescaled
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:10|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshBlue

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:ThreshBlue
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    Select method for constructing file names:From image filename
    Select image name for file prefix:InputImage
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_filtered
    Select file format to use:jpg
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:12|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
    Press button to select measurements to export:Image|AreaOccupied_TotalArea_ThreshBlue,Image|AreaOccupied_AreaOccupied_ThreshBlue,Image|FileName_InputImage,Image|Threshold_OrigThreshold_ThreshBlue,Image|Threshold_SumOfEntropies_ThreshBlue,Image|Threshold_WeightedVariance_ThreshBlue,Image|Threshold_FinalThreshold_ThreshBlue
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