CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:4
    Text that these images have in common (case-sensitive):3.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Slice>.*)_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DAPI
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):1.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Slice>.*)_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:FITC
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):2.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Slice>.*)_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:PI
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):0.tif
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:(?P<Slice>.*)_(.*)_(.*)
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DIC
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    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DAPI
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:3|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select or enter the column delimiter:,
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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