CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:3
    Text that these images have in common (case-sensitive):1.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DAPI
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):2.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:FITC
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):3.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:PI
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    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['Measures Focus Score']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DAPI
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:60
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:3|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notes:['Skips images with a too low focus score. When recording confocal tile scans, this is used to exclude out-of-focus images.']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
    Hidden:1
    Hidden:1
    Name the flag's category:ScoreTooLow
    Name the flag:ScoreTooLow
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_FocusScore_DAPI
    Flag images based on low values?:Yes
    Minimum value:0.2
    Flag images based on high values?:No
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
IdentifyPrimaryObjects:[module_num:4|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:Yes
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.008,1.0
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Green
    Select the method to identify the secondary objects:Distance - N
    Select the input image:FITC
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    Number of pixels by which to expand the primary objects:1
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    Name the outline image:Cells_GreenOutlines
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    Retain outlines of the identified secondary objects?:Yes
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Green_Ext
    Select the method to identify the secondary objects:Distance - N
    Select the input image:FITC
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    Number of pixels by which to expand the primary objects:8
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells_Green_Ext
    Select the smaller identified objects:Cells_Green
    Name the tertiary objects to be identified:DirectBackgroundGreen
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    Retain outlines of the tertiary objects?:No

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Red
    Select the method to identify the secondary objects:Distance - N
    Select the input image:PI
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    Number of pixels by which to expand the primary objects:1
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    Name the outline image:Cells_RedOutlines
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    Retain outlines of the identified secondary objects?:Yes
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Red_Ext
    Select the method to identify the secondary objects:Distance - N
    Select the input image:PI
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    Number of pixels by which to expand the primary objects:8
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:No

IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells_Red_Ext
    Select the smaller identified objects:Cells_Red
    Name the tertiary objects to be identified:DirectBackgroundRed
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:FITC
    Select objects to measure:Cells_Green
    Select objects to measure:DirectBackgroundGreen

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:PI
    Select objects to measure:Cells_Red
    Select objects to measure:DirectBackgroundRed

CalculateMath:[module_num:13|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notes:['Mean + 2*SD']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
    Name the output measurement:ThresholdDirectBackgroundGreen
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:DirectBackgroundGreen
    Select the first operand measurement:Intensity_StdIntensity_FITC
    Multiply the above operand by:2
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:DirectBackgroundGreen
    Select the second operand measurement:Intensity_MeanIntensity_FITC
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

CalculateMath:[module_num:14|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
    Name the output measurement:ThresholdDirectBackgroundRed
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:DirectBackgroundRed
    Select the first operand measurement:Intensity_StdIntensity_PI
    Multiply the above operand by:2
    Raise the power of above operand by:1
    Select the second operand measurement type:Object
    Select the second operand objects:DirectBackgroundRed
    Select the second operand measurement:Intensity_MeanIntensity_PI
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

RelateObjects:[module_num:15|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
    Select the input child objects:Cells_Green
    Select the input parent objects:DirectBackgroundGreen
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:16|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
    Select the input child objects:Cells_Red
    Select the input parent objects:DirectBackgroundRed
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ClassifyObjects:[module_num:17|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
    Should each classification decision be based on a single measurement or on the combination of a pair of measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:DirectBackground
    Select the measurement to classify by:Math_ThresholdDirectBackground
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Negative,Positive
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the output image:ClassifiedNuclei
    Enter the object name:DirectBackgroundGreen
    Select the first measurement:Math_ThresholdDirectBackgroundGreen
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Select the second measurement:Mean_Cells_Green_Intensity_MeanIntensity_FITC
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:Yes
    Enter the low-low bin name:GREEN_low_low
    Enter the low-high bin name:GREEN_ow_high
    Enter the high-low bin name:GREEN_high_low
    Enter the high-high bin name:GREEN_high_high
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:Yes
    Enter the image name:ClassifiedNucleiGreen

ClassifyObjects:[module_num:18|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
    Should each classification decision be based on a single measurement or on the combination of a pair of measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:DirectBackground
    Select the measurement to classify by:Math_ThresholdDirectBackground
    Select bin spacing:Evenly spaced bins
    Number of bins:2
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Negative,Positive
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:Yes
    Name the output image:ClassifiedNuclei
    Enter the object name:DirectBackgroundRed
    Select the first measurement:Math_ThresholdDirectBackgroundRed
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Select the second measurement:Mean_Cells_Red_Intensity_MeanIntensity_PI
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:Yes
    Enter the low-low bin name:RED_low_low
    Enter the low-high bin name:RED_low_high
    Enter the high-low bin name:RED_high_low
    Enter the high-high bin name:RED_high_high
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:Yes
    Enter the image name:ClassifiedNucleiRed

GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Select the input image to be colored red:PI
    Select the input image to be colored green:FITC
    Select the input image to be colored blue:DAPI
    Name the output image:RGB_merge
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:20|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
    Select a color scheme:RGB
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    Select the input image to be colored green:FITC
    Select the input image to be colored blue:DAPI
    Name the output image:FITCDAPI_merge
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
GrayToColor:[module_num:21|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
    Select a color scheme:RGB
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    Select the input image to be colored green:FITC
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    Name the output image:FITC_coloured
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RGB_merge
    Name the output image:RGB_merge_outline
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:Blue
    Select outlines to display:Cells_GreenOutlines
    Select outline color:Green

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:FITC_coloured
    Name the output image:FITC_coloured_outline
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:White

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:RGB_merge
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_MergeRGB
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:FITC_coloured
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_FITC
    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:DAPI
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_DAPI
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:FITC_coloured_outline
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_FITC_outline
    Select file format to use:png
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:FITCDAPI_merge
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_MergeFITCDAPI
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:ClassifiedNucleiGreen
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_ClassificationGreen
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|Outlines
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

ExportToSpreadsheet:[module_num:30|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select or enter the column delimiter:,
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Result.csv
    Use the object name for the file name?:No
    Data to export:Cells_Green
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cells_Red
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:DirectBackgroundGreen
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:DirectBackgroundRed
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
