CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124145122
GitHash:0c7fb94
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does containregexp "3.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "1.tif")
    Name to assign these images:FITC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "2.tif")
    Name to assign these images:PI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "0.tif")
    Name to assign these images:DIC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:DIC
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
Smooth:[module_num:6|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
    Select the input image:DIC
    Name the output image:DICSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5.0
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DICInverted
    Image or measurement?:Image
    Select the first image:DICSmooth
    Multiply the first image by:1
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:8|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
    Select the input image:DICInverted
    Name the output image:DICThresholded
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageAreaOccupied:[module_num:9|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:DICThresholded

ConserveMemory:[module_num:10|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
    Specify which images?:Images to remove
    Select image to remove:DIC
    Select image to remove:DICInverted
    Select image to remove:DICSmooth

CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:DAPI
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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notes:['Rescale aktivieren? Ueber alle Bilder gleich anwenden?']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
    Select the input image:FITC
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:13|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notes:['Rescale aktivieren? Ueber alle Bilder gleich anwenden?']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
    Select the input image:PI
    Name the output image:IllumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:14|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
    Select the input image:DAPI
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:15|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
    Select the input image:FITC
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:16|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
    Select the input image:PI
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Green
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrGreen
    Number of pixels by which to expand the primary objects:6
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    Name the outline image:Cells_GreenOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Masking objects:From image
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:19|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Red
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrRed
    Number of pixels by which to expand the primary objects:6
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    Name the outline image:Cells_RedOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Masking objects:From image
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageIntensity:[module_num:20|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
    Select the image to measure:CorrGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells_Green
    Select the image to measure:CorrRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells_Red

CalculateMath:[module_num:21|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notes:['CV * mu * F + mu', 'F= 15']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
    Name the output measurement:Math_Green
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Intensity_MedianIntensity_CorrGreen_Cells_Green
    Multiply the above operand by:1.5
    Raise the power of above operand by:1
    Select the second operand measurement type:Image
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    Select the second operand measurement:Intensity_MedianIntensity_CorrGreen_Cells_Green
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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notes:['CV * mu * F + mu', 'F= 15']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
    Name the output measurement:Math_Red
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Intensity_MedianIntensity_CorrRed_Cells_Red
    Multiply the above operand by:1.5
    Raise the power of above operand by:1
    Select the second operand measurement type:Image
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    Select the second operand measurement:Intensity_MedianIntensity_CorrRed_Cells_Red
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ApplyThreshold:[module_num:23|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
    Select the input image:CorrGreen
    Name the output image:ThreshGreen
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Select the measurement to threshold with:Math_Math_Green
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
ApplyThreshold:[module_num:24|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
    Select the input image:CorrRed
    Name the output image:ThreshRed
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Select the measurement to threshold with:Math_Math_Red
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
MeasureObjectSizeShape:[module_num:25|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
    Select objects to measure:Cells_Green
    Select objects to measure:Cells_Red
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:26|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
    Hidden:1
    Select an image to measure:ThreshGreen
    Select objects to measure:Cells_Green

MeasureObjectIntensity:[module_num:27|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
    Hidden:1
    Select an image to measure:ThreshRed
    Select objects to measure:Cells_Red

ConserveMemory:[module_num:28|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
    Specify which images?:Images to remove
    Select image to remove:IllumBlue
    Select image to remove:IllumGreen
    Select image to remove:IllumRed
    Select image to remove:CorrBlue
    Select image to remove:CorrGreen
    Select image to remove:CorrRed

FilterObjects:[module_num:29|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
    Name the output objects:FilteredGreen
    Select the object to filter:Cells_Green
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredGreenObjects
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThreshGreen
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0001
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:30|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
    Name the output objects:FilteredRed
    Select the object to filter:Cells_Red
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:FilteredRedObjects
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThreshRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0001
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:31|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
    Select the input child objects:FilteredRed
    Select the input parent objects:FilteredGreen
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:32|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
    Name the output objects:FilteredGreenRedDouble
    Select the object to filter:FilteredGreen
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_FilteredRed_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
RescaleIntensity:[module_num:33|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notes:['Rescales 4096 to 65536 grey values for export (x16)']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
    Select the input image:DAPI
    Name the output image:RescaledBlue
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.000000,1.000000
    Intensity range for the output image:0.0,16
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0
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
RescaleIntensity:[module_num:34|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notes:['Rescales 4096 to 65536 grey values for export (x16)']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
    Select the input image:FITC
    Name the output image:RescaledGreen
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.000000,1.000000
    Intensity range for the output image:0.0,16
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0
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
RescaleIntensity:[module_num:35|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notes:['Rescales 4096 to 65536 grey values for export (x16)']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
    Select the input image:PI
    Name the output image:RescaledRed
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.000000,1.000000
    Intensity range for the output image:0.0,16
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0
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
GrayToColor:[module_num:36|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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledRed
    Select the image to be colored green:RescaledGreen
    Select the image to be colored blue:RescaledBlue
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:FilteredGreenObjects
    Select outline color:Green
    Select outlines to display:FilteredRedObjects
    Select outline color:Red
    Select outlines to display:NucOutlines
    Select outline color:Blue

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MergeRGB
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|\\\\g<Date>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/tdettmer

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlined
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|\\\\g<Date>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/tdettmer

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:DICThresholded
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DIC
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    Append a suffix to the image file name?:No
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    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|\\\\g<Date>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Elsewhere...|/Users/tdettmer

ExportToSpreadsheet:[module_num:41|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:,
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Result.csv
    Use the object name for the file name?:No
    Data to export:Cells_Green
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Cells_Red
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:FilteredGreenRedDouble
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
