CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):0000.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DIC
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    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['Score focus']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
Smooth:[module_num:3|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notes:['Smooth by 5 px to get better readout of occupied area']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
    Select the input image:DIC
    Name the output image:DICBlur
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter, in  pixels:5.0
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
ImageMath:[module_num:4|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notes:['Invert image to get readout of occupied pixels right']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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DICInverted
    Image or measurement?:Image
    Select the first image:DICBlur
    Multiply the first image by:1
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:5|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notes:['Binarize image by Otsu thresholding']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
    Select the input image:DICInverted
    Name the output image:DICThresholded
    Select the output image type:Binary (black and white)
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    Select the thresholding method:Otsu Global
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    Lower and upper bounds on threshold:0.000000,1.000000
    Threshold correction factor:1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageAreaOccupied:[module_num:6|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notes:['How many pixels are white? --> Occupied area', 'PercentMaximal from MeasureImageIntensity module results in the same readout as AreaOccupied*100/TotalArea.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:DICThresholded

MeasureImageIntensity:[module_num:7|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notes:['Intensity of thresholded images is measured to find mis-thresholded images.', 'PercentMaximal = Occupied area']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
    Select the image to measure:DICThresholded
    Measure the intensity only from areas enclosed by objects?:No
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
FlagImage:[module_num:8|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notes:['Flags images with more than 80 percent white pixels in it, which mostly means mis-thresholded images. This value may have to be adjusted.']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Intensity_PercentMaximal_DICThresholded
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:80

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:DICThresholded
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DIC
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_binarized
    Select file format to use:jpg
    Output file location:Default Output Folder sub-folder|images
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:10|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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