CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):02.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigBlue
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):00.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:OrigGreen
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:3|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

MeasureObjectIntensity:[module_num:4|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notes:['Measure intensity features from nuclei, cell and cytoplasm objects against the cropped images.']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
    Hidden:2
    Select an image to measure:OrigBlue
    Select an image to measure:OrigGreen
    Select objects to measure:Nuclei
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:5|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:6|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notes:['Overlay the nucleus outlines on the cropped nuclear image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:OutlinedNuc
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucOutlines
    Select outline color:White

SaveImages:[module_num:7|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notes:["Save the overlay image as an 8-bit TIF, appending the text 'outline' to the original filename of the nuclei image."]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
    Select the type of image to save:Image
    Select the image to save:OutlinedNuc
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:outline
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:8|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
